alias,pop,parent,dims,gating_method,gating_args,collapseDataForGating,groupBy,preprocessing_method,preprocessing_args
boundary,boundary,root,"FSC-A,SSC-A",boundary,"min=c(5e4,0),max=c(2.5e5,2.5e5)",NA,NA,NA,NA
nonDebris,nonDebris+,boundary,FSC-A,mindensity,"gate_range=c(5e4,1e5),adjust=1.5",NA,NA,NA,NA
lymph,lymph,nonDebris,"FSC-A,SSC-A",flowClust,"K=2,quantile=0.90,target=c(1e5,5e4)",NA,NA,prior_flowClust,K=2
Singlets,FSC-W-,lymph,FSC-W,tailgate,tol=5e-3,NA,NA,standardize_flowset,NA
PE-A,PE-A-,Singlets,PE-A,tailgate,tol=1e-2,NA,NA,standardize_flowset,NA
CD3,CD3+/-,PE-A,CD3,mindensity,"gate_range=c(80,120)",NA,NA,NA,NA
CD19gate_1,CD19+,CD3-,CD19,mindensity,"gate_range=c(130,200)",NA,NA,NA,NA
CD19gate,CD19+,CD19gate_1,CD19,tailgate,"tol=1e-2,positive = TRUE",NA,NA,standardize_flowset,NA
CD27gate,CD27+,CD19gate,CD27,flowClust,K=2,NA,NA,NA,NA
IgDgate,IgD-,CD19gate,IgD,tailgate,"tol=1e-4, positive = FALSE,side='left'",NA,NA,NA,NA
*,IgD+/-CD27+/-,CD19gate,"IgD,CD27",refGate,CD27gate:IgDgate,NA,NA,NA,NA
*,CD4+/-,CD3+,CD4,mindensity,,NA,NA,standardize_flowset,NA
CD8-,CD8-,CD3+,CD8,mindensity,,NA,NA,NA,NA
CD8+,CD8+,CD4-,CD8,mindensity,,NA,NA,NA,NA
CD4_1,CD4+CD8-,CD3+,"CD4,CD8",refGate,CD4+:CD8-,NA,NA,NA,NA
CD8,CD4-CD8+,CD3+,"CD4,CD8",refGate,CD4-:CD8+,NA,NA,NA,NA
CD4,CD8-,CD4_1,CD8,tailgate,"tol=1e-2,positive = FALSE",NA,NA,standardize_flowset,NA
ActivatedCD4,HLA-DR+,CD4,HLA-DR,tailgate,tol=5e-6,NA,NA,standardize_flowset,NA
*,CD45RA+/-,CD4,CD45RA,mindensity,NA,NA,NA,NA,NA
CCR7gate,CCR7,CD4/CD45RA+,CCR7,tailgate,"tol=1e-4, positive = FALSE,side='left'",NA,NA,NA,NA
CCR7gate,CCR7,CD4/CD45RA-,CCR7,tailgate,"tol=1e-4, positive = FALSE,side='left'",NA,NA,NA,NA
*,CCR7+/-CD45RA+,CD4,"CCR7,CD45RA",refGate,CD4/CD45RA+/CCR7gate:CD4/CD45RA+,NA,NA,NA,NA
*,CCR7+/-CD45RA-,CD4,"CCR7,CD45RA",refGate,CD4/CD45RA-/CCR7gate:CD4/CD45RA-,NA,NA,NA,NA